PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = 416_EXPERIMENT_PSYCHOPY_AU2220019_AU2220225
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      lineWidth = 0.5
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent image
      image [set every repeat] = $stimulus_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.75
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    KeyboardComponent key_resp
      allowedKeys = 'f','s'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.75
      storeCorrect = True
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  Routine guide
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    TextComponent instructions
      font = Times New Roman
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!


        1. You will see a series of faces on the screen.

        2.  Your task is to categorize each face as either Fearful (F) or Surprised (S) as quickly and accurately as possible.

        3. Press the "F" key if the face appears Fearful or the "S" key if the face appears Surprised.

        4. The face will be shown for 750 milliseconds (0.75s), so please respond quickly.

        5. Try to be as accurate as possible while responding as fast as you can.


        Press SPACEBAR to go ahead.
    KeyboardComponent ins_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine guide_2
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    KeyboardComponent ins_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions_2
      color = 1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please be fast and accurate as much as possible.  If you do not respond in time, the next image will appear automatically.

        Press SPACEBAR to start the experiment.
Flow
  Routine guide
  Routine guide_2
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = 416_conditions_research.xlsx
    loopType = random
    nReps = 20
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    conditions:
      [{'stimulus_image': 'fear.jpg', 'correct_response': 'f'},
      {'stimulus_image': 'surprise.jpg', 'correct_response': 's'},
      {'stimulus_image': 'fear_upper_blur.jpg', 'correct_response': 'f'},
      {'stimulus_image': 'fear_lower_blur.jpg', 'correct_response': 'f'},
      {'stimulus_image': 'surprise_upper_blur.jpg', 'correct_response': 's'},
      {'stimulus_image': 'surprise_lower_blur.jpg', 'correct_response': 's'}]
    Routine trial
  LoopTerminator loop
